PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'session': '001', 'participant': '', 'gender': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  colPriority = {'': ''}
  expName = StroopTask
  keyboardBackend = ioHub
  logging level = data
  runMode = 1
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Routines
  Routine trial
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    TextComponent target
      color [set every repeat] = $colour
      letterHeight = 0.25
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent response
      allowedKeys = 'a','s','d','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine thanks
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    TextComponent text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        The test has now finished

        Thank you for your participation
  Routine instructions
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    TextComponent instruText
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        Welcome

        You will see the names of different colours.
        These will be displayed using different coloured text.

        Please respond to the colour of the word. Not the word itself.

        a = red, s = green, d = yellow, f = blue


        Press "c" to continue to the task.
    KeyboardComponent key_resp_2
      allowedKeys = "c"
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine HighCL
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    TextComponent HighCL_secondary_start
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        !!!ALERT!!!

        Remember the following list:

        5, 8, 7, 3

        At the end of task, you will be asked to perform some operations on this list.

        Press 'c' when you are ready.
    KeyboardComponent key_resp_3
      allowedKeys = 'c'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine highCL_end
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    TextComponent HighCL_secondary_end
      letterHeight = 0.15
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        If you Subract 3 from each element of the list you saw earlier, then what will be the new list:

        a) 4, 5, 6, 7
        s) 4, 5, 6, 7
        d) 4, 5, 6, 7
        f) 4, 5, 6, 7
    KeyboardComponent high_cl_response
      allowedKeys = 'a','s','d','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LowCL
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    TextComponent LowCL_secondary_start
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Remeber this list:

        4, 5, 7
  Routine lowCL_end
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    TextComponent LOW_CL_secondary_end
      letterHeight = 0.15
      startVal [time (s)] = 0.0
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      text:
        What will be updated list if you ADD 1 in each element of the list you told be remember:


        a) 6,7,9

        s) 5,6,8

        d) 6,7,8

        f) 5,7,8
    KeyboardComponent low_cl_response
      allowedKeys = 'a','s','d','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrctions_break
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    TextComponent task_instructions
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        GET READY

        Task will start in 10 sec.

        Please respond to the colour of the word. Not the word itself.

        a = red, s = green, d = yellow, f = blue
  Routine nextround
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  Routine waiting
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    TextComponent text_2
      letterHeight = 0.09
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine memo_inst
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    TextComponent memo1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Remember the list of number:
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  Routine memo_lastInst
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        If you Subract 3 from each element of the list you saw earlier, then what will be the new list:

        a) 4, 5, 6, 7
        s) 4, 5, 6, 7
        d) 4, 5, 6, 7
        f) 4, 5, 6, 7
  Routine HighCL2
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    TextComponent HighCL2_secondary_start
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        !!!ALERT!!!

        Remember the following list:

        1, 8, 7, 3

        At the end of task, you will be asked to perform some operations on this list.

        Press 'c' when you are ready.
    KeyboardComponent inst_key
      allowedKeys = 'c'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine break_between
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    TextComponent bre
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        GET READY

        Trial is about to start.
  Routine LowCL2
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    TextComponent text_4
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Remember the following list:

        1, 8, 7
  Routine highCL_end2
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    TextComponent HighCL2_secondary_end
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        If you Subract 3 from each element of the list you saw earlier, then what will be the new list:

        a) 1, 5, 6, 7
        s) 1, 5, 6, 7
        d) 1, 5, 6, 7
        f) 1, 5, 6, 7
    KeyboardComponent highCL_end_resp
      allowedKeys = 'a','s','d','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine lowCL2_end
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    TextComponent LowCL2_secondary_end
      letterHeight = 0.15
      startVal [time (s)] = 0.0
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      text:
        What will be updated list if you ADD 1 in each element of the list you told be remember:


        a) 9,7,9

        s) 9,6,8

        d) 9,7,8

        f) 9,7,8
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'a','s','d','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trail2
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    TextComponent TEST
      color [set every repeat] = $colour
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp_TEST
      allowedKeys = 'a','s','d','f'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine practice
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    TextComponent text_5
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Get Ready

        Practice task is about to start.
  Routine practice_end
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    TextComponent text_6
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Practice test is completed.

        Real task will start soon.
Flow
  Routine instructions
  Routine practice
  LoopInitiator TEST_trials loopType="TrialHandler"
    conditionsFile = practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'red', 'colour': 'blue', 'congruent': 0, 'corrAns': 'f'},
      {'word': 'yellow', 'colour': 'yellow', 'congruent': 1, 'corrAns': 'd'},
      {'word': 'red', 'colour': 'green', 'congruent': 0, 'corrAns': 's'},
      {'word': 'blue', 'colour': 'green', 'congruent': 0, 'corrAns': 's'},
      {'word': 'blue', 'colour': 'blue', 'congruent': 1, 'corrAns': 'f'},
      {'word': 'green', 'colour': 'green', 'congruent': 1, 'corrAns': 's'},
      {'word': 'yellow', 'colour': 'green', 'congruent': 0, 'corrAns': 's'},
      {'word': 'green', 'colour': 'yellow', 'congruent': 0, 'corrAns': 'd'},
      {'word': 'blue', 'colour': 'red', 'congruent': 0, 'corrAns': 'a'},
      {'word': 'red', 'colour': 'red', 'congruent': 1, 'corrAns': 'a'}]
    Routine trail2
  LoopTerminator TEST_trials
  Routine practice_end
  LoopInitiator overall loopType="TrialHandler"
    conditionsFile = outerloop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'nHighResp1': 0, 'nHighResp2': 0, 'nLowResp1': 0, 'nLowResp2': 1},
      {'nHighResp1': 0, 'nHighResp2': 1, 'nLowResp1': 0, 'nLowResp2': 0},
      {'nHighResp1': 1, 'nHighResp2': 0, 'nLowResp1': 0, 'nLowResp2': 0},
      {'nHighResp1': 0, 'nHighResp2': 0, 'nLowResp1': 1, 'nLowResp2': 0}]
    Routine break_between
    LoopInitiator highCL2 loopType="TrialHandler"
      loopType = random
      nReps = nHighResp2
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      Routine HighCL2
      Routine instrctions_break
      LoopInitiator trials_highCL2 loopType="TrialHandler"
        conditionsFile = ALLcl_4colourconditions.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'word': 'red', 'colour': 'blue', 'congruent': 0, 'corrAns': 'f'},
          {'word': 'green', 'colour': 'red', 'congruent': 0, 'corrAns': 'a'},
          {'word': 'red', 'colour': 'green', 'congruent': 0, 'corrAns': 's'},
          {'word': 'blue', 'colour': 'green', 'congruent': 0, 'corrAns': 's'},
          {'word': 'blue', 'colour': 'blue', 'congruent': 1, 'corrAns': 'f'},
          {'word': 'green', 'colour': 'green', 'congruent': 1, 'corrAns': 's'},
          {'word': 'blue', 'colour': 'green', 'congruent': 0, 'corrAns': 's'},
          {'word': 'green', 'colour': 'green', 'congruent': 1, 'corrAns': 's'},
          {'word': 'blue', 'colour': 'red', 'congruent': 0, 'corrAns': 'a'},
          {'word': 'green', 'colour': 'red', 'congruent': 0, 'corrAns': 'a'},
          {'word': 'red', 'colour': 'red', 'congruent': 1, 'corrAns': 'a'},
          {'word': 'green', 'colour': 'green', 'congruent': 1, 'corrAns': 's'},
          {'word': 'green', 'colour': 'yellow', 'congruent': 0, 'corrAns': 'd'},
          {'word': 'red', 'colour': 'green', 'congruent': 0, 'corrAns': 's'},
          {'word': 'blue', 'colour': 'yellow', 'congruent': 0, 'corrAns': 'd'},
          {'word': 'green', 'colour': 'blue', 'congruent': 0, 'corrAns': 'f'},
          {'word': 'red', 'colour': 'blue', 'congruent': 0, 'corrAns': 'f'},
          {'word': 'blue', 'colour': 'blue', 'congruent': 1, 'corrAns': 'f'},
          {'word': 'green', 'colour': 'green', 'congruent': 1, 'corrAns': 's'},
          {'word': 'yellow', 'colour': 'green', 'congruent': 0, 'corrAns': 's'},
          {'word': 'blue', 'colour': 'blue', 'congruent': 1, 'corrAns': 'f'},
          {'word': 'green', 'colour': 'green', 'congruent': 1, 'corrAns': 's'}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
        Routine trial
      LoopTerminator trials_highCL2
      Routine waiting
      Routine highCL_end2
    LoopTerminator highCL2
    Routine break_between
    LoopInitiator highCL1 loopType="TrialHandler"
      loopType = random
      nReps = nHighResp1
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      Routine HighCL
      Routine instrctions_break
      LoopInitiator trials_highCL loopType="TrialHandler"
        conditionsFile = ALLcl_4colourconditions.xlsx
        loopType = random
        nReps = 1
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        conditions:
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        Routine trial
      LoopTerminator trials_highCL
      Routine waiting
      Routine highCL_end
    LoopTerminator highCL1
    Routine break_between
    LoopInitiator lowCL2 loopType="TrialHandler"
      loopType = random
      nReps = nLowResp2
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      Routine instrctions_break
      LoopInitiator trials_lowCL2 loopType="TrialHandler"
        conditionsFile = ALLcl_4colourconditions.xlsx
        loopType = random
        nReps = 1
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        conditions:
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        Routine trial
      LoopTerminator trials_lowCL2
      Routine waiting
    LoopTerminator lowCL2
    Routine break_between
    LoopInitiator lowCL1 loopType="TrialHandler"
      loopType = random
      nReps = nLowResp1
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      Routine instrctions_break
      LoopInitiator trials_lowcl loopType="TrialHandler"
        conditionsFile = ALLcl_4colourconditions.xlsx
        loopType = random
        nReps = 1
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        conditions:
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        Routine trial
      LoopTerminator trials_lowcl
      Routine waiting
    LoopTerminator lowCL1
  LoopTerminator overall
  Routine thanks
